PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo Project Exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent text
      color = -0.0039, 1.0000, 0.6627
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = "In this experiment, you will choose between two food options. One is familiar and safe, while the other is a mystery with varying chances of being good. Press any key to begin."
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    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    TextComponent choice_text
      color = 0.8824, 0.8039, 0.0980
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"Safe Option: " + safe_option + "\nRisky Option: " + risky_option + "\nProbability of Good Risky Outcome: " + str(probability*100) + "%"
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    KeyboardComponent choice_key
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine End
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    TextComponent end
      color = -0.0039, 1.0000, 0.6627
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = "Thank you for participating! Press any key to exit."
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    KeyboardComponent exit_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $'You chose the ' + ('Safe Option' if choice_key.keys == '1' else 'Risky Option') + '.'
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = food_conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'safe_option': 'Pizza', 'risky_option': 'Mystery Dish A', 'probability': 0.8},
      {'safe_option': 'Burger', 'risky_option': 'Mystery Dish B', 'probability': 0.2},
      {'safe_option': 'Manchurian', 'risky_option': 'Mystery Dish C', 'probability': 0.7},
      {'safe_option': 'Aloo Paranthe', 'risky_option': 'Mystery Dish D', 'probability': 0.6},
      {'safe_option': 'Pasta', 'risky_option': 'Mystery Dish E', 'probability': 0.3}]
    Routine Trial
  LoopTerminator trials
  Routine Feedback
  Routine End
